CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:9
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "D.TIF")
    Name to assign these images:OrigBlue
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "F.TIF")
    Name to assign these images:OrigGreen
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "R.TIF")
    Name to assign these images:OrigRed
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
MeasureImageIntensity:[module_num:5|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
    Select the image to measure:OrigRed
    Measure the intensity only from areas enclosed by objects?:No
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
TestAllThresholds:[module_num:6|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
    Select the input image:OrigRed
    Do you want to test adaptive thresholding?:Yes
    Adaptive window size:50
    Do you want to test manual thresholding?:Yes
    Manual threshold:0.2
    Do you want to test thresholding based on a measurement?:Yes
    Select the measurement to use to threshold.:Intensity_MeanIntensity_OrigRed
    Do you want to test RobustBackground thresholding?:Yes
    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
    Name the output image:ThresholdedOutputImage
    Which threshold should be used to generate your output image?:Minimum cross entropy

DisplayDataOnImage:[module_num:7|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
    Display object or image measurements?:Image
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    Measurement to display:Threshold_FinalThreshold_ThresholdedOutputImage
    Select the image on which to display the measurements:OrigBlue
    Text color:red
    Name the output image that has the measurements displayed:DisplayImage
    Font size (points):10
    Number of decimals:2
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
FlagImage:[module_num:8|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
    Hidden:1
    Hidden:1
    Name the flag's category:Metadata
    Name the flag:QCFlag
    How should measurements be linked?:Flag if any fail
    Skip image set if flagged?:No
    Flag is based on:Whole-image measurement
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    Which measurement?:Threshold_WeightedVariance_ThresholdedOutputImage
    Flag images based on low values?:No
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    Flag images based on high values?:No
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
ExportToSpreadsheet:[module_num:9|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Image|Threshold_OrigThreshold_ThresholdedOutputImage,Image|Threshold_SumOfEntropies_ThresholdedOutputImage,Image|Threshold_WeightedVariance_ThresholdedOutputImage,Image|Threshold_FinalThreshold_ThresholdedOutputImage
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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